PsychoPy2experiment version="3.2.4"
Settings
  Data filename = u'archive/%s_%s_%s' % (expInfo['id'], 'archive', expInfo['date'])
  Experiment info = {'id': '', 'stim_set': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = degFlat
  Window size (pixels) = [2048, 1152]
  color = $[-0.6,-0.6,-0.6]
  expName = study_test_proc
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Routines
  Routine setup_routine
    CodeComponent setup_code
      Code Type = Py
      Begin Experiment:
        # Update expInfo ID
        expInfo['id'] = expInfo['id']

        # Save directory
        save_dir = os.path.join('data', 'sub-{}'.format(expInfo['id']))
        if not os.path.isdir(save_dir):
            os.makedirs(save_dir)

        # Initialize color lists
        cueColor = [-1.0,-1.0,-1.0] # Default to black (cue)
        wordColor = [-1.0,-1.0,-1.0] # Default to black (word)

        # Get the stimulus directory
        expInfo['stim_set'] = 'set' + str(expInfo['stim_set'])
        stim_dir = os.path.join('stim_files', expInfo['stim_set'])
        if not os.path.isdir(stim_dir):
            raise Exception('Stim directory does not exist!!!!')


        ## USEFUL FUNCTIONS ##
        # Define function for determining study condition
        def get_study_cond(a,b):
            '''
            this function takes as input the study condition (a)
            and the study judgment (b) and computes a number for the condition.
            Four conditions:
            Condition 1 = Shoebox - Informed (red cue, black word)
            Condition 2 = Manmade - Informed (blue cue, black word)
            Condition 3 = Shoebox - Uninformed (black cue, red word)
            Condition 4 = Manmade - Uninformed (black cue, blue word)
            '''
            if a == 'informed' and b == 'shoebox':
                cond = 1
            elif a == 'informed' and b == 'manmade':
                cond = 2
            elif a == 'uninformed' and b == 'shoebox':
                cond = 3
            elif a == 'uninformed' and b == 'manmade':
                cond = 4

            return(cond)

        # Determine study response hand accuracy
        def study_resp_acc(resp,task,correct):
            '''
            This determines in the study hand is correct or incorrect.
            Shoebox is left hand, manmade is right hand.
            This also returns response accuracy.
            Inputs are:
                resp - subjects response from keypress
                task - manmade or shoebox
                correct - correct response (either y or n)
            A tuple is returned with 3 values:
                coded_resp = either y, n, wh (wrong hand), or nr (no response)
                hand_acc = 1 or 0 (1 = correct, 0 = incorrect)
                resp_acc = 1 or 0 (1 = correct, 0 = incorrect resp)
            The resp_acc is also coded 0 if there is an incorrect hand button press.
            '''

            # Initialize outputs
            coded_resp = ''
            hand_acc = []
            resp_acc = []

            # Spot check correct input
            if correct not in ('y','n'):
                raise ValueError('the correct input must be y or n.')

            # Define yes/no responses
            yesResp = ('f','1','j','3')
            noResp = ('d','2','k','4')

            # Define correct response and cor_hand
            if task == 'shoebox':
                cor_hand = ('d','f','1','2')
            else:
                cor_hand = ('j','k','3','4')

            # Get three outputs
            if not resp: # Empty response
                coded_resp = 'nr'
                hand_acc = 0
                resp_acc = 0
            elif resp in cor_hand: # Correct hand response
                hand_acc = 1
                if correct == 'y':
                    if resp in yesResp: # Correct yes response
                        resp_acc = 1
                        coded_resp = 'y'
                    else:
                        resp_acc = 0
                        coded_resp = 'n'
                else:
                    if resp in noResp: # Correct no response
                        resp_acc = 1
                        coded_resp = 'n'
                    else:
                        resp_acc = 0
                        coded_resp = 'y'
            else: # Incorrect hand response
                coded_resp = 'wh'
                hand_acc = 0
                resp_acc = 0

            # Return values
            return(coded_resp,hand_acc,resp_acc)
      End Experiment:
        thisExp.saveAsPickle(filename)
        thisExp.saveAsWideText(filename + '.csv')
        thisExp.saveAsWideText(filename + '.tsv')
  Routine phase_complete
    TextComponent phase_completed_text
      font = Helvetica
      letterHeight = 1.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Phase completed
      wrapWidth = 50
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  Routine cue_trial
    CodeComponent study_trial_code
      Code Type = Py
      Begin Experiment:
        # Main Timing variables
        get_ready_time = .35
        cue_time = .5
        cue_interval_time = 1.25

        # Do some math on timings
        cue_start = get_ready_time
        cue_interval_start = cue_time + get_ready_time


        # Define possible jitters
        jitters = [.5,.75,1.0,1.25,1.5]
      Begin Routine:
        # Define condition
        cond = get_study_cond(study_condition, study_judgment)

        # Select condition
        if cond == 1:
            cueColor = [1.0,-1.0,-1.0]  # Cue to Red
            wordColor = [1.0,1.0,1.0] # Default to white (word)
        elif cond == 2:
            cueColor = [-1.0,1.0,1.0]  # Cue to Blue
            wordColor = [1.0,1.0,1.0] # Default to white (word)
        elif cond == 3:
            cueColor = [1.0,1.0,1.0]  # white cue
            wordColor = [1.0,-1.0,-1.0] # Word to Red
        elif cond == 4:
            cueColor = [1.0,1.0,1.0]  # white cue
            wordColor = [-1.0,1.0,1.0] # Word to Blue

        # Determine word time
        if study_phase == 'prac1_study':
            word_time = 60.0
            word_interval_time = 0.0
            resp_time = 60.0
            jitter = 0.0
        else:
            word_time = .5
            word_interval_time = 1.5
            shuffle(jitters)
            jitter = jitters[0]
            resp_time = jitter + word_time + word_interval_time

        # Do some math on timing
        word_interval_start = word_time
        jitter_start = word_time + word_interval_time
    TextComponent get_ready_text
      durationEstim = .35
      font = Helvetica
      letterHeight = 1.5
      startEstim = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $get_ready_time
      text = !!
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    PolygonComponent cue_circle
      durationEstim = .5
      fillColor [set every repeat] = $cueColor
      lineColor [set every repeat] = $cueColor
      nVertices = 180
      shape = regular polygon...
      size = (1.5,1.5)
      startEstim = .35
      startVal [time (s)] = $cue_start
      stopVal [duration (s)] = $cue_time
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    TextComponent cue_interval_fix
      durationEstim = 1.25
      font = Helvetica
      letterHeight = 1.5
      startEstim = .85
      startVal [time (s)] = $cue_interval_start
      stopVal [duration (s)] = $cue_interval_time
      text = +
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  Routine prac1_pause
    CodeComponent pause_code
      Code Type = Py
      Begin Routine:
        if study_phase == 'prac1_study':
            continueRoutine = True
        else:
            continueRoutine = False
    TextComponent pause_fixation
      durationEstim = 1.0
      font = Helvetica
      letterHeight = 1.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine study_trial
    TextComponent study_text
      color [set every repeat] = $wordColor
      durationEstim = .5
      font = Helvetica
      letterHeight = 1.5
      startEstim = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $word_time
      text [set every repeat] = $word
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    TextComponent study_interval_fix
      durationEstim = 1.5
      font = Helvetica
      letterHeight = 1.5
      startEstim = .5
      startVal [time (s)] = $word_interval_start
      stopVal [duration (s)] = $word_interval_time
      text = +
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    TextComponent jitter_text
      durationEstim = 1.0
      font = Helvetica
      letterHeight = 1.5
      startEstim = 2.0
      startVal [time (s)] = $jitter_start
      stopVal [duration (s)] = $jitter
      text = +
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    KeyboardComponent study_resp
      allowedKeys = 'f','j','d','k'
      durationEstim = 3.0
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $resp_time
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    CodeComponent resp_term_code
      Code Type = Py
      Each Frame:
        if study_phase == 'prac1_study':
            if study_resp.keys in ['', [], None]:
                continueRoutine = True
            else:
                continueRoutine = False
  Routine study_instructions
    CodeComponent study_instruction_code
      Code Type = Py
      Begin Routine:
        stim_file = os.path.join(stim_dir, expInfo['stim_set'] + '_' + study_phase + '.csv')
    ImageComponent study_instructions_image
      image = images\study_summary_instructions.png
      size = (40.0,22.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent study_instructions_wait
      allowedKeys = 'space', 'lctrl', 'rctrl'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine study_save_trials
    CodeComponent study_save_trials_code
      Code Type = Py
      Begin Routine:
        # Update the task text for saving
        if study_phase == 'prac1_study':
            task='pracstudy1'
        elif study_phase == 'prac2_study':
            task='pracstudy2'
        else:
            task='study'

        # Make the save file name (This should have accurate id as it is reading from it)
        suffix = 'sub-{}_task-{}_beh'.format(expInfo['id'], task)
        save_file = os.path.join(save_dir, suffix)

        # Save it many different ways
        study_trials.saveAsWideText(save_file + '.tsv')
        study_trials.saveAsWideText(save_file + '.csv')
        study_trials.saveAsPickle(save_file)
  Routine long_pause
    TextComponent long_pause_text
      font = Helvetica
      letterHeight = 1.5
      startVal [time (s)] = 0.0
      text = Take a break and wait for further instructions from the experimenter.
      wrapWidth = 50
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    KeyboardComponent long_pause_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine test_instructions
    CodeComponent test_instruction_code
      Code Type = Py
      Begin Routine:
        stim_file = os.path.join(stim_dir, expInfo['stim_set'] + '_' + test_phase + '.csv')
    ImageComponent test_instructions_image
      image = images\test_summary_instructions.png
      size = (40.0,22.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent test_instructions_wait
      allowedKeys = 'space', 'lctrl', 'rctrl'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine test_save_trials
    CodeComponent test_save_trials_code
      Code Type = Py
      Begin Routine:
        # Update the test_phase text for saving
        if test_phase == 'prac_test':
            task='practest'
        else:
            task='test'

        # Make the save file name (This should have accurate id as it is reading from it)
        suffix = 'sub-{}_task-{}_beh'.format(expInfo['id'], task)
        save_file = os.path.join(save_dir, suffix)

        # Save it many different ways
        test_trials.saveAsWideText(save_file + '.tsv')
        test_trials.saveAsWideText(save_file + '.csv')
        test_trials.saveAsPickle(save_file)
  Routine test_trial
    CodeComponent test_trial_code
      Code Type = Py
      Begin Experiment:
        # Labels for Slider
        so='\n   6\r\nSure\r\n Old'
        mo='\n    5\r\nMaybe\r\n  Old'
        go='\n    4\r\nGuess\r\n  Old'
        gn='\n    3\r\nGuess\r\n New'
        mn='\n    2\r\nMaybe\r\n New'
        sn='\n   1\r\nSure\r\nNew'
    TextComponent test_word
      font = Helvetica
      letterHeight = 1.5
      startVal [time (s)] = 0.0
      text [set every repeat] = $word
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    RatingScaleComponent test_resp
      forceEndRoutine = True
      high = 6
      low = 1
      marker = circle
      pos = 0, -0.4
      showAccept = False
      singleClick = True
      size = 1.0
      startVal [time (s)] = 0
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      customize_everything:
        marker='circle',
        markerColor=[-0.6,-0.6,-0.6],
        stretch=1.6,
        pos=[0.0,-0.2],
        low=1,
        high=6,
        tickMarks=[1,2,3,4,5,6],
        labels=[sn,mn,gn,go,mo,so],
        disappear=False,
        singleClick=True,
        textSize=.8,
        textFont='Helvetica',
        showAccept=False,
        respKeys=['s','d','f','j','k','l'],
        noMouse=True
  Routine iti
    TextComponent iti_text
      font = Helvetica
      letterHeight = 1.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text = +
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  Routine study_break
    CodeComponent study_break_code
      Code Type = Py
      Begin Experiment:
        # Define number of trials between rests
        rest_n = 64
      Begin Routine:
        if study_trials.thisN == 0:
            continueRoutine = False
        elif study_trials.thisN % rest_n != 0:
            continueRoutine = False
        else:
            continueRoutine = True

        # Control delay
        draw_delay = continueRoutine
    TextComponent study_break_text
      font = Helvetica
      letterHeight = 1.5
      startVal [time (s)] = 0.0
      wrapWidth = 50
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      text:
        Take a break

        Press the space bar when ready to continue
    KeyboardComponent study_break_ready
      allowedKeys = 'space', 'lctrl', 'rctrl'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine test_break
    CodeComponent test_break_code
      Code Type = Py
      Begin Experiment:
        # Define number of trials between rests
        rest_n = 64
      Begin Routine:
        if test_trials.thisN == 0:
            continueRoutine = False
        elif test_trials.thisN % rest_n != 0:
            continueRoutine = False
        else:
            continueRoutine = True

        # Control delay
        draw_delay = continueRoutine
    TextComponent test_break_text
      font = Helvetica
      letterHeight = 1.5
      startVal [time (s)] = 0.0
      wrapWidth = 50
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      text:
        Take a break

        Press the space bar when ready to continue
    KeyboardComponent test_break_ready
      allowedKeys = 'space', 'lctrl', 'rctrl'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine study_delay
    CodeComponent study_delay_code
      Code Type = Py
      Begin Routine:
        if study_trials.thisN == 0:
            continueRoutine = True
        else:
            continueRoutine = draw_delay
    TextComponent study_delay_text
      font = Helvetica
      letterHeight = 1.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = +
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  Routine test_delay
    CodeComponent test_delay_code
      Code Type = Py
      Begin Routine:
        if test_trials.thisN == 0:
            continueRoutine = True
        else:
            continueRoutine = draw_delay
    TextComponent test_delay_text
      font = Helvetica
      letterHeight = 1.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = +
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Flow
  Routine setup_routine
  LoopInitiator study_phases loopType="TrialHandler"
    conditionsFile = study_phases.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine study_instructions
    LoopInitiator study_trials loopType="TrialHandler"
      conditionsFile = $stim_file
      loopType = sequential
      nReps = 1
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      Routine study_break
      Routine study_delay
      Routine cue_trial
      Routine study_trial
      Routine prac1_pause
    LoopTerminator study_trials
    Routine study_save_trials
    Routine study_delay
    Routine phase_complete
  LoopTerminator study_phases
  Routine long_pause
  LoopInitiator test_phases loopType="TrialHandler"
    conditionsFile = test_phases.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('phase_name', 'prac_test')]),
      OrderedDict([('phase_name', 'crit_test')])]
    Routine test_instructions
    LoopInitiator test_trials loopType="TrialHandler"
      conditionsFile = $stim_file
      loopType = sequential
      nReps = 1
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      Routine test_break
      Routine test_delay
      Routine test_trial
      Routine iti
    LoopTerminator test_trials
    Routine test_save_trials
    Routine study_delay
    Routine phase_complete
  LoopTerminator test_phases
