PsychoPy2experiment version="2020.1.3"
Settings
  Completed URL = https://app.prolific.co/submissions/complete?cc=F56EDD24
  Data filename = u'archive/%s_%s_%s' % (expInfo['id'], expName, expInfo['date'])
  Experiment info = {'id': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Use version = latest
  Window size (pixels) = [1536, 864]
  expName = study_test_online_proc
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Routines
  Routine instructions
    ImageComponent instructions_image
      image [set every repeat] = $instruction_img_file
      size = [1.2,.8]
      startVal [time (s)] = 0.0
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    TextComponent study_phase_progress_text
      color = black
      letterHeight = .02
      pos = (.3, .35)
      startEstim = 0
      startVal [frame N] = 0.0
      text [set every repeat] = $phase_progress
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    KeyboardComponent instructions_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine phase_setup
    CodeComponent select_stim_lists
      Code Type = Auto->JS
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      Begin Routine:
        #select practice or test file (define first then add path if not practice)
        stim_file = phase_name +'.csv'
        print(stim_file)

        if phase_name =='informed_prac':
            instruction_img_file = 'informed_prac_instructions.png'
        elif phase_name == 'uninformed_prac':
            instruction_img_file ='uninformed_prac_instructions.png'
        elif phase_name == 'uncued_prac':
            instruction_img_file = 'uncued_prac_instructions.png'
        elif phase_name == 'informed1_study1' or phase_name == 'informed2_study1' or phase_name == 'informed1_study2' or phase_name == 'informed2_study2' or phase_name == 'informed1_study3' or phase_name == 'informed2_study3' or phase_name == 'informed1_study4' or phase_name == 'informed2_study4':
            instruction_img_file = 'informed_real_instructions.png'
        elif phase_name == 'uninformed1_study1' or phase_name == 'uninformed2_study1' or phase_name == 'uninformed1_study2' or phase_name == 'uninformed2_study2' or phase_name == 'uninformed1_study3' or phase_name == 'uninformed2_study3' or phase_name == 'uninformed1_study4' or phase_name == 'uninformed2_study4':
            instruction_img_file = 'uninformed_real_instructions.png'
        else :
            instruction_img_file = 'uncued_real_instructions.png'
  Routine visual_word_routine
    PolygonComponent uninformed_cue_box
      durationEstim = .5
      fillColor = $[0,0,0]
      lineColor [set every repeat] = $box_color
      lineWidth = 6
      shape = rectangle
      size = [.3,.15]
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = $vis_word_dur
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    TextComponent visual_word_text
      durationEstim = .5
      letterHeight = .05
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = $vis_word_dur
      text [set every repeat] = $word
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    TextComponent visual_word_fixation
      durationEstim = 1.5
      letterHeight = .05
      startEstim = .5
      startVal [frame N] = $vis_word_dur
      stopVal [duration (frames)] = $vis_word_fix_dur
      text = +
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    KeyboardComponent visual_resp
      allowedKeys = 'j','k'
      durationEstim = 2
      forceEndRoutine = False
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = $vis_word_dur + vis_word_fix_dur
      store = first key
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  Routine visual_cue_routine
    PolygonComponent visual_cue_rect
      durationEstim = .50
      fillColor [set every repeat] = $cue_color
      lineColor [set every repeat] = $cue_color
      nVertices = 180
      shape = rectangle
      size = [.07,.07]
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = $vis_cue_dur
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    TextComponent visual_cue_fixation
      durationEstim = .50
      letterHeight = .05
      startEstim = .50
      startVal [frame N] = $vis_cue_dur
      stopVal [duration (frames)] = $vis_cue_fix_dur
      text = +
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  Routine code_study_resp
    CodeComponent log_study_resp
      Code Type = Auto->JS
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      Begin Routine:
        # Extract the appropriate response from the correct object

        study_resp_key = visual_resp.keys
        study_rt   = visual_resp.rt


        if study_resp_key == 'j'or study_resp_key == 'k':
            study_resp_key = study_resp_key
            study_rt = study_rt
        else:
            study_resp_key = 'n/a'
            study_rt = -99

        # Code study response
        study_resp = study_scale[study_resp_key]

        # Store in trials object
        trials.addData('study_resp_key',study_resp_key)
        trials.addData('study_resp',study_resp)
        trials.addData('study_rt',study_rt)
  Routine pause_routine
    TextComponent pause_text
      letterHeight = .05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = +
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  Routine select_presentation
    CodeComponent select_condition_code
      Code Type = Py
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      Begin Experiment:
        #vis_cue_rep  = 0 # Visual cue loop
        #box_color = [] # set up box color
        #cue_color = [] # set up cue color
      Begin Routine:
        #if cue_condition == 'informed'and study_judgment == 'manmade':
        #    vis_cue_rep = 1
        #    cue_color = [-1,1,1] # blue
        #    box_color = [1,1,1] # white
        #if cue_condition == 'informed'and study_judgment == 'shoebox':
        #    vis_cue_rep = 1
        #    cue_color = [1,-1,-1] #red
        #    box_color = [1,1,1] # white
        #if cue_condition == 'uninformed' and study_judgment == 'manmade' : # uninformative trials
        #    vis_cue_rep = 0
        #    box_color = [-1,1,1] #blue
        #if cue_condition == 'uninformed' and study_judgment == 'shoebox':
        #    vis_cue_rep = 0
        #    box_color = [1,-1,-1] # red
      Each Frame:
        #if cue_condition == 'informed'and study_judgment == 'manmade':
        #    vis_cue_rep = 1
        #    cue_color = [-1,1,1] # blue
        #    box_color = [1,1,1] # white
        #if cue_condition == 'informed'and study_judgment == 'shoebox':
        #    vis_cue_rep = 1
        #    cue_color = [1,-1,-1] #red
        #    box_color = [1,1,1] # white
        #if cue_condition == 'uninformed' and study_judgment == 'manmade' : # uninformative trials
        #    vis_cue_rep = 0
        #    box_color = [-1,1,1] #blue
        #if cue_condition == 'uninformed' and study_judgment == 'shoebox':
        #    vis_cue_rep = 0
        #    box_color = [1,-1,-1] # red
  Routine phase_complete
    CodeComponent save_study_data
      Code Type = Auto->JS
  Routine study_complete
    TextComponent study_complete_text
      durationEstim = 5
      letterHeight = .05
      startEstim = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        This phase is complete.

        Please wait for futher instructions.
  Routine experiment_setup
    CodeComponent create_shuffle
      Code Type = Both
      Begin JS Experiment:
        shuffle = function (a) {
            var j, x, i;
            for (i = a.length - 1; i > 0; i--) {
                j = Math.floor(Math.random() * (i + 1));
                x = a[i];
                a[i] = a[j];
                a[j] = x;
            }
            return a;
        }
      Begin JS Routine:
        expInfo["id"] = ("sub-p2e3s" + expInfo["id"]);
        stimuli_cb_options = [1, 2, 3, 4, 5, 6, 7, 8, 9, 10, 11, 12];
        shuffle(stimuli_cb_options);
        stimuli_cb_options[0];
        console.log(stimuli_cb_options[0]);
        if ((stimuli_cb_options[0] === 1)) {
            phase_file = "List1_study_cbA_phases.csv";
        } else {
            if ((stimuli_cb_options[0] === 2)) {
                phase_file = "List2_study_cbA_phases.csv";
            } else {
                if ((stimuli_cb_options[0] === 3)) {
                    phase_file = "List3_study_cbA_phases.csv";
                } else {
                    if ((stimuli_cb_options[0] === 4)) {
                        phase_file = "List4_study_cbA_phases.csv";
                    } else {
                        if ((stimuli_cb_options[0] === 5)) {
                            phase_file = "List1_study_cbB_phases.csv";
                        } else {
                            if ((stimuli_cb_options[0] === 6)) {
                                phase_file = "List2_study_cbB_phases.csv";
                            } else {
                                if ((stimuli_cb_options[0] === 7)) {
                                    phase_file = "List3_study_cbB_phases.csv";
                                } else {
                                    if ((stimuli_cb_options[0] === 8)) {
                                        phase_file = "List4_study_cbB_phases.csv";
                                    } else {
                                        if ((stimuli_cb_options[0] === 9)) {
                                            phase_file = "List1_study_cbC_phases.csv";
                                        } else {
                                            if ((stimuli_cb_options[0] === 10)) {
                                                phase_file = "List2_study_cbC_phases.csv";
                                            } else {
                                                if ((stimuli_cb_options[0] === 11)) {
                                                    phase_file = "List3_study_cbC_phases.csv";
                                                } else {
                                                    if ((stimuli_cb_options[0] === 12)) {
                                                        phase_file = "List4_study_cbC_phases.csv";
                                                    } else {
                                                        console.log("you broke me");
                                                    }
                                                }
                                            }
                                        }
                                    }
                                }
                            }
                        }
                    }
                }
            }
        }
    CodeComponent respons_logging_code
      Code Type = Auto->JS
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      Begin Experiment:
        # study set up scale responses for pleasantness judgement
        study_scale = {
                'j':1,
                'k':2,
                'l':3,
                'n/a':-99,
                '':-99
                }
        # test scale set up
        item_scale = {
                1.0:1,
                2.0:2,
                3.0:3,
                4.0:4,
                5.0:5,
                6.0:6,
                None :None,
                '':''
                }

        source_scale = {
                4.0:'shoebox',
                5.0:'manmade',
                6.0:'dk',
                None:'n/a',
                '':'n/a'
                }
    CodeComponent stimulus_timing
      Code Type = Auto->JS
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      Begin Experiment:
        # Print framerate
        print(expInfo['frameRate'])

        # Study set up
        #frames
        vis_cue_dur = round( .5 / frameDur ) # Length of cue in frames
        vis_cue_fix_dur = round( .5 / frameDur ) # Length of the cue-target interval after cue offset
        vis_word_dur = round( .5 / frameDur ) # Average of auditory file lengths
        vis_word_fix_dur = round( 1.5 / frameDur )


        # test set up
        initial_delay_frames = round( 0.250 / frameDur ) # 250 millisecond initial fixation
        word_duration_frames = round( 0.500 / frameDur ) # 500 millisecond
        test_delay_frames = round(5.00/frameDur)
        test_maxtime_frames = round(10.00/frameDur)
        test_iti_frames = round(.5/frameDur)
        sm_kb_wait_frames = round(.2/frameDur) # allow for a short delay in KB press from item to source memory
  Routine test_phase_setup
    CodeComponent test_phase_stimuli
      Code Type = Auto->JS
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      Begin Experiment:
        #define variable
        select_test =''
      Begin Routine:
        #select practice or test file
        study_test = {
                1:'1',
                2:'2',
                3:'3',
                4:'4',
                5:'1',
                6:'2',
                7:'3',
                8:'4',
                9:'1',
                10:'2',
                11:'3',
                12:'4'
                }


        if phase_name == '_prac':
            test_task = 'practest'
            stim_file_test = 'prac_test.csv'
        else:
            test_task = 'test'
            select_test = study_test[stimuli_cb_options[0]]
            stim_file_test = 'test'+ select_test +'.csv'
            print(stim_file_test)
  Routine test_instructions
    ImageComponent test_instructions_image
      image [set every repeat] = $test_instruction_image
      size = [1.2,.8]
      startEstim = 0
      startVal [frame N] = 0.0
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    KeyboardComponent test_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine warn_prac_or_crit
    TextComponent test_warning_text
      letterHeight = .05
      startEstim = 0
      startVal [frame N] = 0.0
      text [set every repeat] = $test_instructions
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    KeyboardComponent warning_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startEstim = 0
      startVal [frame N] = 0.0
      store = nothing
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  Routine test_break
    TextComponent draw_test_break
      letterHeight = .05
      startEstim = 0
      startVal [frame N] = 0.0
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      text:
        Take a break to relax

        Remember use the entire rating scale (1-6)

        Press b to begin
    TextComponent draw_counter_text
      letterHeight = 0.05
      pos = (0, .2)
      startEstim = 0
      startVal [frame N] = 0.0
      text [set every repeat] = $break_progress_display
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    KeyboardComponent draw_test_break_key_resp
      allowedKeys = 'b'
      forceEndRoutine = True
      startEstim = 0
      startVal [frame N] = 0.0
      store = nothing
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  Routine test_delay
    CodeComponent test_delay_code
      Code Type = Both
      Begin JS Routine:
        if (test_trials.thisN === 0) {
            continueRoutine = true;
        } else {
            continueRoutine = show_break;
        }
      Begin Routine:
        if test_trials.thisN == 0:
            continueRoutine = True
        else:
            continueRoutine = show_break
      Each Frame:
        if test_trials.thisN == 0:
            continueRoutine = True
        else:
            continueRoutine = show_break
      Each JS Frame:
        if (test_trials.thisN === 0) {
            continueRoutine = true;
        } else {
            continueRoutine = show_break;
        }
    TextComponent test_delay_text
      durationEstim = 5
      letterHeight = .05
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $test_delay_frames
      text = +
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  Routine item_memory
    ImageComponent item_scale_image
      durationEstim = 10
      image = item_scale.png
      pos = (0, -.2)
      size = [1,.2]
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $test_maxtime_frames
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    TextComponent item_stimuli
      durationEstim = 10
      letterHeight = .05
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $test_maxtime_frames
      text [set every repeat] = $word
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    KeyboardComponent item_key_resp
      allowedKeys = 's','d','f','j','k','l'
      durationEstim = 10
      forceEndRoutine = True
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $test_maxtime_frames
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  Routine source_memory
    CodeComponent run_sm_code
      Code Type = Both
      Begin JS Routine:
        if (item_key_resp.keys === "j" || item_key_resp.keys === "k" || item_key_resp.keys === "l") {
            continueRoutine = true;
        } else {
            continueRoutine = false;
        }
      Begin Routine:
        if item_key_resp.keys == 'j'or item_key_resp.keys== 'k'or item_key_resp.keys=='l':
            continueRoutine = True
        else:
            continueRoutine = False
      Each Frame:
        if item_key_resp.keys == 'j'or item_key_resp.keys== 'k'or item_key_resp.keys=='l':
            continueRoutine = True
        else:
            continueRoutine = False
      Each JS Frame:
        if (item_key_resp.keys === "j" || item_key_resp.keys === "k" || item_key_resp.keys === "l") {
            continueRoutine = true;
        } else {
            continueRoutine = false;
        }
    ImageComponent source_scale_image
      durationEstim = 10
      image = source_scale.png
      pos = (0, -.2)
      size = [.9,.2]
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $test_maxtime_frames
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    TextComponent item_stimuli_text
      durationEstim = 10
      letterHeight = .05
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $test_maxtime_frames
      text [set every repeat] = $word
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    KeyboardComponent source_key_resp
      allowedKeys = 'j','k','l'
      durationEstim = 10
      forceEndRoutine = True
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = $test_maxtime_frames
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  Routine test_iti
    TextComponent test_iti_text
      durationEstim = .75
      letterHeight = .05
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $test_iti_frames
      text = +
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  Routine code_test_resp
    CodeComponent log_test_resp
      Code Type = Auto->JS
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      Begin Routine:
        # Extract the appropriate response from the correct object
        item_resp = item_scale[item_slider.getRating()]
        item_rt   = item_slider.getRT()

        # Update response if necessary
        if item_resp == None or item_resp == '':
            item_resp = 'n/a'
            item_rt = -99
            old_resp = -99
            item_acc = -99
            sm_acc = -99
            bad_trial = 1
        else:
            bad_trial = 0
            # Code item memory accuracy
            if item_resp == 4 or item_resp == 5 or item_resp == 6 :

                # Handle item response
                old_resp = 1
                if old_new == 'old':
                    item_acc = 1
                else:
                    item_acc = 0
            else: # Must be a new response
                old_resp = 0
                if old_new == 'new':
                    item_acc = 1
                else:
                    item_acc = 0

        #code source memory response and Rts
        # old = 4,5,6
        if item_resp == 4 or item_resp == 5 or item_resp == 6 :
            sm_resp = sm_slider.getRating()
            sm_resp_coded = source_scale[sm_resp]
            sm_rt = sm_slider.getRT()
            bad_trial = 0
            if sm_resp_coded == 'shoebox' and study_judgment == 'shoebox':
                sm_acc = 1
            elif sm_resp_coded == 'manmade' and study_judgment == 'manmade':
                sm_acc = 1
            elif sm_resp_coded == 'shoebox' and study_judgment == 'manmade':
                sm_acc = 0
            elif sm_resp_coded == 'manmade' and study_judgment == 'shoebox':
                sm_acc = 0
            elif sm_resp_coded == 'dk':
                sm_acc = 0
            else:
                sm_acc = -99
        else:
            sm_resp = -99
            sm_rt  = -99
            sm_acc = -99

        # Store in trials object
        test_trials.addData('item_resp',item_resp)
        test_trials.addData('item_rt',item_rt)
        test_trials.addData('item_acc',item_acc)
        test_trials.addData('old_new_resp',old_resp)

        test_trials.addData('sm_resp',sm_resp)
        test_trials.addData('sm_rt',sm_rt)


        test_trials.addData('sm_acc',sm_acc)

        test_trials.addData('trial_type',bad_trial)
        test_trials.addData('test_cb',stim_file_test)
  Routine test_complete
    TextComponent test_complete_text
      durationEstim = 2
      letterHeight = .05
      startEstim = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = The experiment is now complete!
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  Routine sm_rating
    CodeComponent run_sm
      Code Type = Auto->JS
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      Begin Experiment:
        # Labels for Slider
        mm='5\r\nmanmade\r\n '
        sb='4\r\nshoebox\r\n '
        dk='6\r\ndont know\r\n'
      Begin Routine:
        if item_slider.getRating() == 4.0 or item_slider.getRating() == 5.0 or item_slider.getRating() == 6.0:
            continueRoutine = True
        else:
            continueRoutine = False
      Each Frame:
        if item_slider.getRating() == 4.0 or item_slider.getRating() == 5.0 or item_slider.getRating() == 6.0:
            continueRoutine = True
        else:
            continueRoutine = False
    TextComponent item_text
      durationEstim = 10
      letterHeight = .05
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $test_maxtime_frames
      text [set every repeat] = $word
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    SliderComponent sm_slider
      color = white
      durationEstim = 10
      forceEndRoutine = True
      granularity = 1
      labels = [sb,mm,dk]
      pos = (0, -0.2)
      size = (.6, .04)
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $test_maxtime_frames
      styles = ['slider', 'radio']
      ticks = (4,5,6)
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  Routine hello
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = hello
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  Routine item_rating
    CodeComponent item_code
      Code Type = Auto->JS
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      Begin Experiment:
        # Labels for Slider
        so='6\nSure\nOld'
        mo='5\nMaybe\nOld'
        go='4\nGuess\nOld'
        gn='3\nGuess\nNew'
        mn='2\nMaybe\nNew'
        sn='1\nSure\nNew'


        # Labels for Slider
        #[ 'sure new','maybe new','guess new','guess old','maybe old','sure old']
    TextComponent item_rating_text
      durationEstim = 10
      letterHeight = 0.05
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [frame N] = $test_maxtime_frames
      text [set every repeat] = $word
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    SliderComponent item_slider
      color = white
      durationEstim = 10
      forceEndRoutine = True
      granularity = 1
      labels = [sn,mn,gn,go,mo,so]
      pos = (0, -0.2)
      size = (.8, 0.04)
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [frame N] = $test_maxtime_frames
      styles = ['slider', 'radio']
      ticks = (1, 2, 3, 4, 5,6)
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  Routine study_instructions
    ImageComponent instruction_image
      image [set every repeat] = $instruction_pictures
      size = [1.2,.8]
      startEstim = 0
      startVal [frame N] = 0.0
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    KeyboardComponent practice_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startEstim = 0
      startVal [frame N] = 0.0
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  Routine study_overview_instructions
    ImageComponent overview_instructions_image
      image = overview_instructions4.PNG
      size = [1.2,.8]
      startEstim = 0
      startVal [frame N] = 0.0
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    KeyboardComponent study_warning_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startEstim = 0
      startVal [time (s)] = 0.0
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  Routine selec_test_break
    CodeComponent run_break_code
      Code Type = Auto->JS
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      Begin Experiment:
        break_count = 0
      Begin Routine:
        if break_count == 89 :
            show_break = 1
            break_progress_display = 'Progress: ~20% complete'
        elif break_count == 179:
            show_break = 1
            break_progress_display = 'Progress: ~40% complete'
        elif break_count == 269:
            show_break = 1
            break_progress_display = 'Progress: ~60% complete'
        elif break_count == 359:
            show_break = 1
            break_progress_display = 'Progress: ~80% complete'
        else:
            show_break = 0
      End Routine:
        break_count = break_count + 1
  Routine confirm_question_routine
    ImageComponent confirm_question_image
      image [set every repeat] = $question_confirm_instruction_image
      size = [1.2,.8]
      startEstim = 0
      startVal [frame N] = 0.0
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    KeyboardComponent confirm_question_key_resp
      allowedKeys = 'm','s'
      forceEndRoutine = True
      startEstim = 0
      startVal [frame N] = 0.0
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  Routine confirm_answer_routine
    CodeComponent confirm_ans_code
      Code Type = Auto->JS
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      Begin Experiment:
        show_answer = ''
      Begin Routine:
        if confirm_question_key_resp.keys == correct_answer:
            show_answer = 'correct!'
        else:
            show_answer = 'incorrect!'
      Each Frame:
        if confirm_question_key_resp.keys == correct_answer:
            show_answer = 'correct!'
        else:
            show_answer = 'incorrect!'
    ImageComponent confirm_answer_image
      image [set every repeat] = $answer_confirm_instruction_image
      size = [1.2,.8]
      startEstim = 0
      startVal [frame N] = 0.0
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    TextComponent confirm_answer_text
      color = black
      letterHeight = .05
      pos = (0, .3)
      startEstim = 0
      startVal [frame N] = 0.0
      text [set every repeat] = $show_answer
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    KeyboardComponent confirm_answer_key_resp
      allowedKeys = 'j','k'
      forceEndRoutine = True
      startEstim = 0
      startVal [frame N] = 0.0
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  Routine uncued_routine
    TextComponent uncued_fixation_text
      durationEstim = 1
      letterHeight = 0.05
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $vis_cue_dur + vis_cue_fix_dur
      text = +
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Flow
  Routine experiment_setup
  LoopInitiator study_instruction_loop loopType="TrialHandler"
    conditionsFile = study_instructions.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('instruction_pictures', 'overview_instructions1.PNG')]),
      OrderedDict([('instruction_pictures', 'informed_prac_instructions.png')]),
      OrderedDict([('instruction_pictures', 'uncued_prac_instructions.png')]),
      OrderedDict([('instruction_pictures', 'uninformed_prac_instructions.png')])]
    Routine study_instructions
  LoopTerminator study_instruction_loop
  LoopInitiator confirm_loop loopType="TrialHandler"
    conditionsFile = confirm_instruction_file.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('question_confirm_instruction_image', 'typeA_shoe_question.png'), ('answer_confirm_instruction_image', 'typeA_shoe_answer.png')]),
      OrderedDict([('question_confirm_instruction_image', 'typeA_manmade_question.png'), ('answer_confirm_instruction_image', 'typeA_manmade_answer.png')]),
      OrderedDict([('question_confirm_instruction_image', 'typeB_shoe_question.png'), ('answer_confirm_instruction_image', 'typeB_shoe_answer.png')]),
      OrderedDict([('question_confirm_instruction_image', 'typeB_manmade_question.png'), ('answer_confirm_instruction_image', 'typeB_manmade_answer.png')])]
    Routine confirm_question_routine
    Routine confirm_answer_routine
  LoopTerminator confirm_loop
  LoopInitiator study_overview_loop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine study_overview_instructions
  LoopTerminator study_overview_loop
  LoopInitiator phases loopType="TrialHandler"
    conditionsFile = $phase_file
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine phase_setup
    Routine instructions
    Routine pause_routine
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $stim_file
      loopType = random
      nReps = 1
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      LoopInitiator vis_cue_loop loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = show_cue
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        Routine visual_cue_routine
      LoopTerminator vis_cue_loop
      LoopInitiator vis_uncued_loop loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = show_nocue
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        Routine uncued_routine
      LoopTerminator vis_uncued_loop
      Routine visual_word_routine
      Routine code_study_resp
    LoopTerminator trials
    Routine pause_routine
  LoopTerminator phases
  Routine study_complete
  LoopInitiator test_phase loopType="TrialHandler"
    conditionsFile = test_phase_names.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('phase_name', '_prac'), ('instructions', 'You will now complete the practice trials. Press the spacebar to continue')]),
      OrderedDict([('phase_name', '_crit'), ('instructions', 'Please wait for the experimenter.')])]
    Routine test_phase_setup
    Routine test_instructions
    Routine warn_prac_or_crit
    LoopInitiator test_trials loopType="TrialHandler"
      conditionsFile = $stim_file_test
      loopType = random
      nReps = 1
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      Routine selec_test_break
      LoopInitiator test_break_loop loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = show_break
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        Routine test_break
      LoopTerminator test_break_loop
      Routine test_delay
      Routine item_rating
      Routine sm_rating
      Routine test_iti
      Routine code_test_resp
    LoopTerminator test_trials
  LoopTerminator test_phase
  Routine test_complete
